PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1600]
  expName = pinhole_monitor_examination
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Routines
  Routine code_2
    ImageComponent image_1
      image [set every repeat] = img/IMG.jpg
      startVal [time (s)] = 0.0
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    KeyboardComponent key_response
      allowedKeys = 'b','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code
      Code Type = Py
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      End Experiment:
        thisExp.addData('Front_Boundary', FP)
        thisExp.addData('Backward_Boundary', BP)
        thisExp.addData('Object_Position', OP)
        thisExp.addData('Percent', (BP - FP) / (Backward - Front))
        thisExp.addData('Omega', np.rad2deg(abs(d * OP) / l ** 2) * 60)
      End Routine:
        # Adding choosed button to results list
        letter = key_response.keys[-1]
        obj_positions[-1].append(letter)

        # Adding data to excel file
        trials.addData('Front_Boundary', FP)
        trials.addData('Backward_Boundary', BP)
        trials.addData('Object_Position', OP)
        trials.addData('Percent', (BP - FP) / (Backward - Front))
        trials.addData('Choosed_Position', letter)
        trials.addData('Omega', np.rad2deg(abs(d * OP) / l**2) * 60)

        # Handling normal situation
        if control_f != 2 or control_b != 2:
            if "b" in key_response.keys[-1]:
                BP = OP
                control_b += 1
                control_f = 0
            elif "f" in key_response.keys[-1]:
                FP = OP
                control_f += 1
                control_b = 0

        # Handling checking point after two same observer responses
        if checking_point:
            # Handling situation when checking point occurs before three steps
            if "f" in key_response.keys[-1] and OP < 0:
                check = True
            elif "b" in key_response.keys[-1] and OP > 0:
                check = True
            else:
                check = False

            # Handling situation when checking point occurs after two steps
            for point in reversed(obj_positions[:-2]):
                if point[0] != point[2]:
                    if point[1] == OP and point[3] == letter:
                        check = True
                        break
                    elif point[1] == OP and point[3] != letter:
                        check = False
                        break

            # Points assigment
            if check:
                if obj_positions[-2][3] == 'f':
                    BP = obj_positions[-2][0]
                    FP = obj_positions[-2][1]
                else:
                    BP = obj_positions[-2][1]
                    FP = obj_positions[-2][2]
            else:
                BP = obj_positions[-3][0]
                FP = obj_positions[-3][2]

            control_f = 0
            control_b = 0
            checking_point = False

        # Adding checking point indicator
        if control_f == 2:
            FP = BP
            checking_point = True
        elif control_b == 2:
            BP = FP
            checking_point = True

        # Adding end loop indicator if there are two the same checking points in a row
        if len(obj_positions) >= 6:
            if obj_positions[-1][1] == obj_positions[-4][1] and \
                    obj_positions[-1][3] == obj_positions[-4][3] and \
                    obj_positions[-1][0] == obj_positions[-1][2]:
                loop_end = True

        # Points calculation and drawing plot
        OP = (FP + BP) / 2
        image_reconstruction(OP, 0.01, h, 0.004, 71e-6, p, resolution, alignment, recon_path)
        point_position += 1
        obj_positions.append([BP, OP, FP])
        key_response.keys.pop()

        if obj_positions[-1][0] == obj_positions[-1][1]:
            ax.scatter([point_position, point_position, point_position],
                       obj_positions[-1], c=['r', 'r', 'r'])
        else:
            ax.scatter([point_position, point_position, point_position],
                       obj_positions[-1], c=['b', 'r', 'b'])
            ax.vlines(x=point_position, ymin=obj_positions[-1][2],
                      ymax=obj_positions[-1][0])

        ax.text(x=point_position - 1, y=obj_positions[-2][1], s=letter, fontsize=20)
        ax.hlines(y=0, xmin=-1, xmax=point_position + 1)
        # fig.canvas.draw()

        # Trial ending
        if trials_finised:
            trials.finished = True

        # Loop ending if conditions were met
        if BP != FP and ((BP - FP) / (Backward - Front)) < 0.05:
            plt.savefig(filename + '.jpg')
            trials.finished = True
        elif loop_end:
            plt.savefig(filename + '.jpg')
            trials_finised = True
  Routine WelcomeScreen
    TextComponent welcome_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Start of the alignment
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = End of the examination
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine aligment
    ImageComponent aligment_image
      image [set every repeat] = img/IMG.jpg
      startVal [time (s)] = 0.0
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    KeyboardComponent aligment_keys
      allowedKeys = 'left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent aligment_code
      Code Type = Py
      Begin Experiment:
        import matplotlib.pyplot as plt
        import numpy as np
        from PIL import Image

        p = 17    # pixels per pinhole
        d = 0.055  # interpupilary distance
        l = 1

        Backward = 0.03
        Front = -0.06
        h = 0.005
        OP = (Backward + Front) / 2
        alignment = 0

        control_b = 0
        control_f = 0
        checking_point = False
        loop_end = False
        trials_finised = False

        recon_path = 'C:/Users/PK/Desktop/PsychoPy/img'
        resolution = 1600, 2560  # tablet resolution

        def object_positions(z, y, h, g, p_s, p, resolution_0):
            # all data in meters except parameter p
            # z   - object position in z
            # y   - object position in y
            # h   - object thickness
            # g   - gap between tablet and pinhole array
            # p_s - pixel size
            # p   - pixels per pinhole

            if z == 0:
                z += 0.000001

            z /= p_s
            y /= p_s
            h /= p_s * 2
            g /= -p_s
            p /= 2

            number_of_iteration = resolution_0 / (p * 2)
            pinhole_position = -(resolution_0 / 2) - p

            positions = []
            for i in range(int(number_of_iteration)):
                pinhole_position += 2 * p
                y_position_1 = ((y + h - pinhole_position) * g / z) + pinhole_position
                y_position_2 = ((y - h - pinhole_position) * g / z) + pinhole_position

                if y_position_1 < pinhole_position - p:
                    y_position_1 = pinhole_position - p
                elif y_position_1 > pinhole_position + p:
                    y_position_1 = pinhole_position + p

                if y_position_2 < pinhole_position - p:
                    y_position_2 = pinhole_position - p
                elif y_position_2 > pinhole_position + p:
                    y_position_2 = pinhole_position + p

                y_position_1 = 2 * pinhole_position - y_position_1
                y_position_2 = 2 * pinhole_position - y_position_2

                y_position_1 += number_of_iteration * p
                y_position_2 += number_of_iteration * p

                y_position_1 = int(y_position_1)
                y_position_2 = int(y_position_2)

                positions.append(sorted((y_position_1, y_position_2)))

            return positions


        def object_width(object_positions, resolution):
            maximium = 0
            minimum = resolution[1]
            for positions in object_positions:
                if positions[0] != positions[1]:
                    if max(positions) > maximium:
                        maximium = max(positions)
                    if min(positions) < minimum:
                        minimum = min(positions)

            return minimum, maximium, maximium - minimum


        def image_reconstruction(z, y, h, g, p_s, p, resolution, alignment, recon_path):
            object_positions_1 = object_positions(0, -y, h, g, p_s, p, resolution[1])
            object_positions_2 = object_positions(z, y, h, g, p_s, p, resolution[1])

            image = np.zeros(resolution)

            for positions in object_positions_1:
                image[:, positions[0]:positions[1]] = 255

            for positions in object_positions_2:
                image[:, positions[0]:positions[1]] = 255

            object_width_1 = object_width(object_positions_1, resolution)
            object_width_2 = object_width(object_positions_2, resolution)
            edge = int((object_width_2[2] - object_width_1[2]) / 2)

            if z > 0:
                slope = 1
                intensity = edge
            elif edge > 0:
                slope = int(255 / edge)
                intensity = 255

            if edge != 0:
                for j in range(edge):
                    intensity -= slope
                    if intensity < 0:
                        intensity = 0
                    image[:, object_width_1[0] - j - 1:object_width_1[0] - j] = intensity
                    image[:, object_width_1[1] + j:object_width_1[1] + j + 1] = intensity

            ali_array = np.zeros((resolution[0], abs(alignment)))

            if alignment > 0:
                image = np.concatenate((ali_array, image), axis=1)
                image = image[:, :-alignment]
            else:
                image = np.concatenate((image, ali_array), axis=1)
                image = image[:, abs(alignment):]

            final = Image.fromarray(np.uint8(image))
            final = final.convert('RGB')
            final.save(f"{recon_path}" + f'/IMG.jpg')


        image_reconstruction(0.025, 0.01, h, 0.004, 71e-6, p, resolution, alignment, recon_path)
      End Routine:
        if 'left' in aligment_keys.keys[-1]:
            alignment -= 1
        elif 'right' in aligment_keys.keys[-1]:
            alignment += 1
        elif 'space' in aligment_keys.keys[-1]:
            aligment_loop.finished = True

        aligment_keys.keys.pop()
        image_reconstruction(0.025, 0.01, h, 0.004, 71e-6, p, resolution, alignment, recon_path)

        if aligment_loop.finished:
            image_reconstruction(0, 0.01, h, 0.004, 71e-6, p, resolution, alignment, recon_path)
  Routine Middle_screen
    TextComponent middle_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Start of the examination
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    KeyboardComponent middle_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine random_choice
    ImageComponent random_choice_image
      image [set every repeat] = img/IMG.jpg
      startVal [time (s)] = 0.0
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    KeyboardComponent random_choice_keys
      allowedKeys = 'f', 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent random_choice_code
      Code Type = Py
      End Routine:
        if "f" in random_choice_keys.keys[-1]:
            BP = Backward
            FP = Front
        elif "b" in random_choice_keys.keys[-1]:
            BP = -Front
            FP = -Backward

        OP = (BP + FP) / 2
        image_reconstruction(OP, 0.01, h, 0.004, 71e-6, p, resolution, alignment, recon_path)

        obj_positions = []
        obj_positions.append([BP, OP, FP])

        plt.ion()
        fig, ax = plt.subplots()
        figManager = plt.get_current_fig_manager()
        figManager.window.move(0, 0)
        point_position = 0
        plot = ax.scatter([point_position, point_position, point_position], obj_positions[0],
                          c=['b', 'r', 'b'])
        ax.set_ylim((FP - 0.01, BP + 0.01))
        ax.hlines(y=0, xmin=-1, xmax=point_position + 1)
        ax.vlines(x=point_position, ymin=obj_positions[-1][2], ymax=obj_positions[-1][0])
Flow
  Routine WelcomeScreen
  LoopInitiator aligment_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 9999
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    Routine aligment
  LoopTerminator aligment_loop
  Routine Middle_screen
  Routine random_choice
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 9999
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    Routine code_2
  LoopTerminator trials
  Routine EndScreen
